CellProfiler Pipeline: http://www.cellprofiler.org
Version:1
SVNRevision:9978

LoadImages:[module_num:1|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
    File type to be loaded:individual images
    File selection method:Text-Exact match
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    Analyze all subfolders within the selected folder?:Yes
    Input image file location:Default Input Folder|None
    Check image sets for missing or duplicate files?:Yes
    Group images by metadata?:No
    Exclude certain files?:No
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    Image count:3
    Text that these images have in common (case-sensitive):w1.TIF
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    Extract metadata from where?:None
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    Channel count:1
    Name this loaded image:Hoechst
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    Text that these images have in common (case-sensitive):w2.TIF
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    Extract metadata from where?:None
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    Channel count:1
    Name this loaded image:GFP
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    Text that these images have in common (case-sensitive):w3.TIF
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    Extract metadata from where?:None
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    Channel count:1
    Name this loaded image:PI
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
IdentifyPrimaryObjects:[module_num:2|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
    Select the input image:Hoechst
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):10,45
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Select the thresholding method:Otsu Global
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.000000,1.000000
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    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:Yes
    Automatically calculate size of smoothing filter?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
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    Retain outlines of the identified objects?:No
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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    Handling of objects if excessive number of objects identified:Continue
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
IdentifySecondaryObjects:[module_num:3|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Distance - N
    Select the input image:GFP
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    Number of pixels by which to expand the primary objects:20
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    Retain outlines of the identified secondary objects?:No
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    Discard secondary objects that touch the edge of the image?:No
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
IdentifyTertiaryObjects:[module_num:4|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
    Select the larger identified objects:Cells
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Prestained
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    Retain outlines of the tertiary objects?:No

MeasureObjectIntensity:[module_num:5|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
    Hidden:2
    Select an image to measure:GFP
    Select an image to measure:PI
    Select objects to measure:Cells
    Select objects to measure:Prestained

FilterObjects:[module_num:6|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
    Name the output objects:InfectedCells
    Select the object to filter:Cells
    Filter using classifier rules or measurements?:Measurements
    Select the filtering method:Limits
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    Retain outlines of the identified objects?:No
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    Measurement count:1
    Additional object count:0
    Select the measurement to filter by:Intensity_MeanIntensity_GFP
    Filter using a minimum measurement value?:Yes
    Minimum value:0.002
    Filter using a maximum measurement value?:No
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
FilterObjects:[module_num:7|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
    Name the output objects:PrestainedCells
    Select the object to filter:Prestained
    Filter using classifier rules or measurements?:Measurements
    Select the filtering method:Limits
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    Retain outlines of the identified objects?:No
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    Measurement count:1
    Additional object count:0
    Select the measurement to filter by:Intensity_MeanIntensity_PI
    Filter using a minimum measurement value?:Yes
    Minimum value:0.0016
    Filter using a maximum measurement value?:No
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