CellProfiler Pipeline: http://www.cellprofiler.org
Version:1
SVNRevision:11710

LoadImages:[module_num:1|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
    File type to be loaded:individual images
    File selection method:Text-Regular expressions
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    Analyze all subfolders within the selected folder?:None
    Input image file location:Elsewhere...|D:\\Artur\\PhD Project\\CP2.0_Pipelines\\Spreaders_Assay
    Check image sets for missing or duplicate files?:No
    Group images by metadata?:No
    Exclude certain files?:No
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    Image count:3
    Text that these images have in common (case-sensitive):\\w*w1.TIF
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    Extract metadata from where?:File name
    Regular expression that finds metadata in the file name:^(?P<Plate>.*)_(?P<Well>[A-P][0-9]{2})_s(?P<Site>[0-9]*)
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    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:Nuclei
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    Rescale intensities?:Yes
    Text that these images have in common (case-sensitive):\\w*w2.tif
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    Extract metadata from where?:File name
    Regular expression that finds metadata in the file name:^(?P<Plate>.*)_(?P<Well>[A-P][0-9]{2})_s(?P<Site>[0-9]*)
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    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:VirusSignal
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    Rescale intensities?:Yes
    Text that these images have in common (case-sensitive):Mask-inv
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    Extract metadata from where?:None
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    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:WellMask
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    Rescale intensities?:No

MaskImage:[module_num:2|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
    Select the input image:Nuclei
    Name the output image:MaskedNuclei
    Use objects or an image as a mask?:Image
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    Select image for mask:WellMask
    Invert the mask?:No

MaskImage:[module_num:3|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
    Select the input image:VirusSignal
    Name the output image:MaskedVirusSignal
    Use objects or an image as a mask?:Image
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    Select image for mask:WellMask
    Invert the mask?:No

IdentifyPrimaryObjects:[module_num:4|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
    Select the input image:Nuclei
    Name the primary objects to be identified:DetectedNuclei
    Typical diameter of objects, in pixel units (Min,Max):15,45
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Select the thresholding method:Otsu Adaptive
    Threshold correction factor:1.1
    Lower and upper bounds on threshold:0.000000,1.000000
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    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:Yes
    Automatically calculate size of smoothing filter?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
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    Retain outlines of the identified objects?:No
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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    Handling of objects if excessive number of objects identified:Continue
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
IdentifySecondaryObjects:[module_num:5|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
    Select the input objects:DetectedNuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Distance - N
    Select the input image:VirusSignal
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    Number of pixels by which to expand the primary objects:5
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    Retain outlines of the identified secondary objects?:No
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    Discard secondary objects that touch the edge of the image?:No
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    Fill holes in identified objects?:No

IdentifyTertiaryObjects:[module_num:6|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
    Select the larger identified objects:Cells
    Select the smaller identified objects:DetectedNuclei
    Name the tertiary objects to be identified:Cytoplasm
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    Retain outlines of the tertiary objects?:No

MeasureObjectIntensity:[module_num:7|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
    Hidden:1
    Select an image to measure:VirusSignal
    Select objects to measure:Cells
    Select objects to measure:DetectedNuclei
    Select objects to measure:Cytoplasm

ExportToSpreadsheet:[module_num:8|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
    Select or enter the column delimiter:Comma (",")
    Prepend the output file name to the data file names?:Yes
    Add image metadata columns to your object data file?:Yes
    Limit output to a size that is allowed in Excel?:No
    Select the columns of measurements to export?:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|None
    Create a GenePattern GCT file?:No
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    Export all measurements, using default file names?:Yes
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