CellProfiler Pipeline: http://www.cellprofiler.org
Version:1
SVNRevision:11000

LoadImages:[module_num:1|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
    File type to be loaded:individual images
    File selection method:Text-Regular expressions
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    Analyze all subfolders within the selected folder?:All
    Input image file location:Default Input Folder|None
    Check image sets for missing or duplicate files?:Yes
    Group images by metadata?:Yes
    Exclude certain files?:No
    Specify metadata fields to group by:Well
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    Image count:3
    Text that these images have in common (case-sensitive):\\w*1[0-2]\\w*w1.TIF
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    Extract metadata from where?:File name
    Regular expression that finds metadata in the file name:^(?P<Plate>.*)_(?P<Well>[A-P][0-9]{2})_s(?P<Site>[0-9]*)
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    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:Nuclei
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    Rescale intensities?:Yes
    Text that these images have in common (case-sensitive):\\w*1[0-2]\\w*w2.TIF
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    Extract metadata from where?:File name
    Regular expression that finds metadata in the file name:^(?P<Plate>.*)_(?P<Well>[A-P][0-9]{2})_s(?P<Site>[0-9]*)
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    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:VirusSignal
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    Rescale intensities?:Yes
    Text that these images have in common (case-sensitive):\\w*1[0-2]\\w*w3.TIF
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    Extract metadata from where?:File name
    Regular expression that finds metadata in the file name:^(?P<Plate>.*)_(?P<Well>[A-P][0-9]{2})_s(?P<Site>[0-9]*)
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    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:RedChan
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    Rescale intensities?:Yes

IdentifyPrimaryObjects:[module_num:2|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
    Select the input image:Nuclei
    Name the primary objects to be identified:DetectedNuclei
    Typical diameter of objects, in pixel units (Min,Max):10,45
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Select the thresholding method:Otsu Global
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.000000,1.000000
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    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:No
    Automatically calculate size of smoothing filter?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
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    Retain outlines of the identified objects?:No
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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    Handling of objects if excessive number of objects identified:Continue
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
IdentifySecondaryObjects:[module_num:3|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
    Select the input objects:DetectedNuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Distance - N
    Select the input image:VirusSignal
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    Number of pixels by which to expand the primary objects:5
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    Retain outlines of the identified secondary objects?:No
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    Discard secondary objects that touch the edge of the image?:No
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    Fill holes in identified objects?:No

IdentifyTertiaryObjects:[module_num:4|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
    Select the larger identified objects:Cells
    Select the smaller identified objects:DetectedNuclei
    Name the tertiary objects to be identified:Cytoplasm
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    Retain outlines of the tertiary objects?:No

MeasureObjectIntensity:[module_num:5|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
    Hidden:1
    Select an image to measure:VirusSignal
    Select objects to measure:Cells
    Select objects to measure:DetectedNuclei
    Select objects to measure:Cytoplasm

MeasureObjectIntensity:[module_num:6|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
    Hidden:1
    Select an image to measure:RedChan
    Select objects to measure:Cells
    Select objects to measure:DetectedNuclei
    Select objects to measure:Cytoplasm

ExportToSpreadsheet:[module_num:7|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
    Select or enter the column delimiter:Comma (",")
    Prepend the output file name to the data file names?:Yes
    Add image metadata columns to your object data file?:Yes
    Limit output to a size that is allowed in Excel?:No
    Select the columns of measurements to export?:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|None
    Create a GenePattern GCT file?:No
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    Export all measurements, using default file names?:Yes
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