CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20140723174500
GitHash:6c2d896
ModuleCount:8
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['To begin creating your project, use the Images module to compile a list of files and/or folders that you want to analyze. You can also specify a set of rules to include only the desired files in your selected folders.', '---', 'Settings converted from legacy pipeline.']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
    Filter images?:Custom
    Select the rule criteria:and (extension does isimage) (file doesnot contain "Thumb")

Metadata:[module_num:2|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notes:['The Metadata module optionally allows you to extract information describing your images (i.e, metadata) which will be stored along with your measurements. This information can be contained in the file name and/or location, or in an external file.', '---', 'Settings converted from legacy pipeline.']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression:^(?P<Plate>.*)_(?P<Well>[A-P][0-9]{2})_s(?P<Site>[0-9])_w(?P<ChannelNumber>[0-9])
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.', '---', 'Settings converted from legacy pipeline.', 'Please change any color images from "Load as Grayscale image" to "Load as Color image"']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
    Assign a name to:Images matching rules
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    Match metadata:[{u'DAPI': u'Plate', u'TRITC': None, u'TL': u'Plate', u'GFP': u'Plate'}, {u'DAPI': u'Well', u'TRITC': None, u'TL': u'Well', u'GFP': u'Well'}, {u'DAPI': u'Site', u'TRITC': None, u'TL': u'Site', u'GFP': u'Site'}]
    Image set matching method:Metadata
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    Assignments count:4
    Single images count:0
    Select the rule criteria:and (file does contain "w1")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "w5")
    Name to assign these images:TL
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "w2")
    Name to assign these images:GFP
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "w4")
    Name to assign these images:TRITC
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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notes:['The Groups module optionally allows you to split your list of images into image subsets (groups) which will be processed independently of each other. Examples of groupings include screening batches, microtiter plates, time-lapse movies, etc.', '---', 'Settings converted from legacy pipeline.']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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:DAPI
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):15,90
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:No
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1.1
    Lower and upper bounds on threshold:0,1.0
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
IdentifySecondaryObjects:[module_num:6|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Watershed - Image
    Select the input image:TL
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    Retain outlines of the identified secondary objects?:No
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:1
    Threshold strategy:Automatic
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
MeasureObjectIntensity:[module_num:7|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
    Hidden:3
    Select an image to measure:DAPI
    Select an image to measure:GFP
    Select an image to measure:TRITC
    Select objects to measure:Cells

ExportToSpreadsheet:[module_num:8|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|None
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite without warning?:Yes
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